CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:19
HasImagePlaneDetails:False

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|Projects/GenHetAcrossCancers/data/share/TCGA/Imaging
    Check image sets for unmatched or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):53425_layer4.tif
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Rescale intensities?:Yes

ColorToGray:[module_num:2|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
    Select the input image:DNA
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ApplyThreshold:[module_num:3|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
    Select the input image:OrigBlue
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ApplyThreshold:[module_num:4|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Automatic
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
UnmixColors:[module_num:5|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notes:['Separate the colors based on the stains used.']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enabled:False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
    Stain count:3
    Select the input color image:DNA
    Name the output name:Hematoxylin
    Stain:Hematoxylin
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    Name the output name:Eosin
    Stain:Eosin
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    Name the output name:OrangeG
    Stain:Orange-G
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Idenitfy the tissue region. Disable size criterion in order to capture everything. Disable declumping since the tissue is meant to be contiguous.']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enabled:False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
    Select the input image:Eosin
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Name the outline image:TissueOutlines
    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskImage:[module_num:7|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notes:['Mask the eosin image with the tissue object for nuclei detection.']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enabled:False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
    Select the input image:Hematoxylin
    Name the output image:MaskedRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:No

MaskImage:[module_num:8|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enabled:False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
    Select the input image:OrigBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Image
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    Select image for mask:OrigBlue
    Invert the mask?:No

MaskImage:[module_num:9|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enabled:False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
    Select the input image:OrangeG
    Name the output image:MaskOrange
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Idenitfy the nuclei. Use per-object thresholding to take advantage of masking. Use 3-class thresholding with middle class set to backround to discriminate between the bright nuclei and remaining dim tissue area, then adjust the threshold correction factor until detection is suitable.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Select the measurement to threshold with:Threshold_OrigThreshold_ThreshBlue
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
SaveImages:[module_num:11|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enabled:False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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiNeigbors
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:12|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enabled:False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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:13|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enabled:False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
    Hidden:2
    Select an image to measure:OrigRed
    Select an image to measure:OrigBlue
    Select objects to measure:Nuclei

MeasureImageIntensity:[module_num:14|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enabled:False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
    Select the image to measure:OrigBlue
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:OrigRed
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:OrigRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Nuclei

MeasureImageQuality:[module_num:15|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigGreen,OrigBlue,OrigRed
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageAreaOccupied:[module_num:16|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enabled:False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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshBlue

MeasureTexture:[module_num:17|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enabled:False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
    Hidden:3
    Hidden:1
    Hidden:1
    Select an image to measure:OrigGreen
    Select an image to measure:OrigBlue
    Select an image to measure:OrigRed
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

ExportToSpreadsheet:[module_num:18|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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::layer6
    Overwrite without warning?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiOutlines
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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